PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'session': u'01', u'participant': u''}
  Units = norm
  Save excel file = True
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Data filename = u'data' + os.sep + 'taxonomic_%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = taxthemexp_tax_img
  logging level = warning
  Screen = 1
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Routines
  Routine learningInstruct
    TextComponent instrText
      color = $[0, 0, 0]
      startVal [time (s)] = 0
      letterHeight = 0.06
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      text:
        In this part, you will learn to categorize some animals and objects.

        On each trial, you will see a target object and three options.

        Your job is to select the option that is most similar to the target.

        Press the left arrow for the leftmost option, the down arrow for the middle option, and the right arrow for the rightmost option.

        You will receive feedback when you categorize correctly or incorrectly.

        When you are ready, press the space key.
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine trial
    KeyboardComponent resp
      correctAns = $correct
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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    ImageComponent image_targ
      stopVal [duration (s)] = 5000
      pos = (0, 0.5)
      startVal [time (s)] = 0.2
      image [set every repeat] = $targ_img
      size = (0.5, 0.5)
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    ImageComponent image1
      stopVal [duration (s)] = 5000
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.2
      image [set every repeat] = $img1
      size = (0.5, 0.5)
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    ImageComponent image2
      stopVal [duration (s)] = 5000
      pos = (0, -0.25)
      startVal [time (s)] = 0.2
      image [set every repeat] = $img2
      size = (0.5, 0.5)
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    ImageComponent image3
      stopVal [duration (s)] = 5000
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.2
      image [set every repeat] = $img3
      size = (0.5, 0.5)
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  Routine testInstruct
    TextComponent testText
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now you should know how to categorize the objects.

        In this next part, you will be tested on your new category knowledge.

        Please try to answer as accurately as possible.

        Press the space key when you are ready to begin.
    KeyboardComponent readyTest
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanksText
      color = $[0, 0, 0]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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      text:
        This part of the experiment has ended.

        Thanks!
  Routine feedback
    CodeComponent message
      Begin Experiment:
        msg=' '
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct!"
        else:
          msg="Oops!"
    TextComponent text
      color = black
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine learningInstruct
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = taxthemtask_tax_prac.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    Routine trial
    Routine feedback
  LoopTerminator pracTrials
  Routine testInstruct
  LoopInitiator expTrials loopType="TrialHandler"
    conditionsFile = taxthemtask_tax_img.xlsx
    loopType = random
    nReps = 1
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    Routine trial
    Routine feedback
  LoopTerminator expTrials
  Routine thanks
